PsychoPy2experiment version="2020.1.3"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1366, 768]
  expName = pirateTrial
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Routines
  Routine studyTrial
    CodeComponent feedback_code
      Code Type = Auto->JS
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      Begin Experiment:
        r_val = []
        l_val = []

        #create reward values
        for t in range(0,num_trial):
            val = rand.randint(1,101)
            r_val.append(val)
            l_val.append(100-val)

        player_score = 0
        pirate_level = 0
        level_limit = 460
        leveled_up = False
      Begin Routine:
        #Assuming you have a r_val and and l_val list:

        trial_r_val = r_val[ currentLoop.thisN ]
        trial_l_val = l_val[ currentLoop.thisN ]

        # Generate uniformly distributed random number between 0 and 1
        hint_prob = rand.uniform(size = 1)

        # Generate start times for hint and response window
        hint_start = rand.uniform(3, 7)
        resp_start = hint_start + rand.uniform(3, 7)

        # Set up hint positions
        left_pos = (0.5, -0.3)
        right_pos = (-0.5, -0.3)

        # Pre-generated array way of changing hint correct probability
        #corr_hint_chance = hint_prob[ currentLoop.thisN ]

        # Multiple ifs way of changing hint correct probability
        if currentLoop.thisN < 30:
               corr_hint_chance = 0.75
        elif currentLoop.thisN < 40:
                corr_hint_chance = 0.2
        elif currentLoop.thisN < 50:
                corr_hint_chance = 0.8
        elif currentLoop.thisN < 60:
                corr_hint_chance = 0.2
        elif currentLoop.thisN < 70:
                corr_hint_chance = 0.8
        elif currentLoop.thisN < 120:
                corr_hint_chance = 0.15

        # statement to define correct keys for trial
        if prob_bg[ currentLoop.thisN ]:
            correct_key = 'left'
            # Determine whether the hint will be show on correct or incorrect side
            if hint_prob >= corr_hint_chance:
                hint_pos = left_pos
            else:
                hint_pos = right_pos
        else:
            correct_key = 'right'
            if hint_prob >= corr_hint_chance:
                hint_pos = right_pos
            else:
                hint_pos = left_pos
      End Routine:
        # This code will run at the end of the routine in which it is placed
        # Useful for making adjustments to the following routine based on responses in the current routine

        # Ensure that the object you are accessing ('key_resp') is the named exactly the same here as in the builder
        if key_resp.keys == 'left': # Start by checking which key was pressed
            if key_resp.corr: # Then see if the response was correct
                imageVariable = imagePath + "Lgreenwin.bmp" # If yes then display the treasure
                score_update = trial_l_val # Add the value displayed to the players score
                textFeedback = fdbck_winText # Display positive feedback text
            else:
                imageVariable = imagePath + "Lgreenlose.bmp"# Otherwise show the empty chest
                score_update = 0
                textFeedback = fdbck_loseText
        elif key_resp.keys == 'right': # Same as above but on the other side
            if key_resp.corr:
                imageVariable = imagePath + "Rbluewin.bmp" # The predefined image path is added to the file name
                score_update = trial_r_val # Add the value displayed to the players score
                textFeedback = fdbck_winText # Display positive feedback text
            else:
                imageVariable = imagePath + "Rbluelose.bmp"
                score_update = 0
                textFeedback = fdbck_loseText

        old_player_score = player_score
        new_player_score = player_score + score_update

        # You might not need this here if you implement the resetting bar in the feedback routine
        # But you will want to transplant some of this code to it
        # (e.g. increasing the player level, subtracting the level limit)
        if player_score > level_limit:
            pirate_level += 1
            leveled_up = True

            player_score -= level_limit



        # Use this to set the image in the following routine
        # Again be sure that the object called is named the same thing as the object in the builder
        image.setImage(imageVariable)
    ImageComponent background
      image = stimuli/piratetask.bmp
      size = (2, 2)
      startVal [time (s)] = 0.0
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    TextComponent R_text
      color = black
      letterHeight = 0.1
      pos = (0.43, -0.05)
      startVal [time (s)] = 0.0
      text [set every repeat] = $trial_r_val
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    TextComponent L_text
      color = black
      letterHeight = 0.1
      pos = (-0.43, -0.05)
      startVal [time (s)] = 0.0
      text [set every repeat] = $trial_l_val
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    PolygonComponent polygon
      fillColor = $None
      lineColor = $[1.000,1.000,-1.000]
      lineWidth = 8
      pos [set every repeat] = $hint_pos
      shape = rectangle
      size = (0.3, 0.3)
      startVal [time (s)] = $hint_start
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    KeyboardComponent key_resp
      allowedKeys = 'left','right'
      correctAns = $correct_key
      forceEndRoutine = True
      startVal [time (s)] = $resp_start
      storeCorrect = True
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  Routine feedback
    ImageComponent image
      image [set every repeat] = $imageVariable
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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    TextComponent R_text_2
      color = black
      letterHeight = 0.1
      pos = (0.43, -0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      text [set every repeat] = $trial_r_val
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    TextComponent L_text_2
      color = black
      letterHeight = 0.1
      pos = (-0.43, -0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      text [set every repeat] = $trial_l_val
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    TextComponent fdbck_text
      color = black
      letterHeight = 0.1
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text [set every repeat] = $textFeedback
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    PolygonComponent feedbackFrame
      lineColor = $[1.000,1.000,-1.000]
      pos = (0, -0.15)
      shape = rectangle
      size = (0.35, 0.55)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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    PolygonComponent feedbackFill
      fillColor = $[1.000,1.000,-1.000]
      pos = (0, -1.5)
      shape = rectangle
      size = (0.35, 0.55)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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  Routine Intro
    CodeComponent setup_code
      Code Type = Auto->JS
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      Begin Experiment:
        # Code in here is run at the very beginning of the experiment
        # Put stuff here that you need to run once but doesn't change

        imagePath = "stimuli/" # This establishes where the stimuli are stored
        imageVariable = None # Need this to initialise the feedback image display
        textFeedback = None # Need this to initialise the text feedback display
        fdbck_winText = "Well done you chose correctly!"
        fdbck_loseText = "better luck next time!"

        num_trial = 120 # Number of trials in the experiment
        zero = [0] #create lists
        one = [1]
        trial_list_s = zero*45+one*15 # Blue 75% Green 25%
        trial_list_vi = zero*16+one*4
        trial_list_vii = zero*4+one*16

        # used for pregenerating array of correct hint probabilities
        #hint_list_s = zero*22+one*8 # p(hint = correct) first 30 trials = 0.73
        #hint_list_vi = zero*8+one*2 # p(hint = correct) = 0.8
        #hint_list_vii = zero*2+one*8 # p(hint = correct) = 0.2
        #hint_list_si = zero*8+one*42 # p(hint = correct) last 50 = 0.16

        # If using this method need to repeat for each set of trials (i.e. s, vi, vii)
        # and then concatenate (as with bg_prob below)
        #hint_prob = [(hint_list_s, hint_list_vii, hint_list_vi, hint_list_vii, hint_list_vi, hint_list_si)]


        from numpy import random as rand #randomise lists
        rand.shuffle(trial_list_s)
        rand.shuffle(trial_list_vi)
        rand.shuffle(trial_list_vii)
        #overall task probability
        prob_bg = trial_list_s + trial_list_vi + trial_list_vii + trial_list_vi



        # set up "winning score"
        #r_mult = prob_bg[t]
        #l_mult = 1-prob_bg[t]
        #r_tot = r_val*r_mult
        #l_tot = l_val*l_mult
  Routine levelUp
    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        if not leveled_up:
            continueRoutine=False
      End Routine:
        leveled_up = False
Flow
  Routine Intro
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = trialList.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('item_n', 1)]),
      OrderedDict([('item_n', 2)]),
      OrderedDict([('item_n', 3)]),
      OrderedDict([('item_n', 4)]),
      OrderedDict([('item_n', 5)]),
      OrderedDict([('item_n', 6)]),
      OrderedDict([('item_n', 7)]),
      OrderedDict([('item_n', 8)]),
      OrderedDict([('item_n', 9)]),
      OrderedDict([('item_n', 10)]),
      OrderedDict([('item_n', 11)]),
      OrderedDict([('item_n', 12)]),
      OrderedDict([('item_n', 13)]),
      OrderedDict([('item_n', 14)]),
      OrderedDict([('item_n', 15)]),
      OrderedDict([('item_n', 16)]),
      OrderedDict([('item_n', 17)]),
      OrderedDict([('item_n', 18)]),
      OrderedDict([('item_n', 19)]),
      OrderedDict([('item_n', 20)]),
      OrderedDict([('item_n', 21)]),
      OrderedDict([('item_n', 22)]),
      OrderedDict([('item_n', 23)]),
      OrderedDict([('item_n', 24)]),
      OrderedDict([('item_n', 25)]),
      OrderedDict([('item_n', 26)]),
      OrderedDict([('item_n', 27)]),
      OrderedDict([('item_n', 28)]),
      OrderedDict([('item_n', 29)]),
      OrderedDict([('item_n', 30)]),
      OrderedDict([('item_n', 31)]),
      OrderedDict([('item_n', 32)]),
      OrderedDict([('item_n', 33)]),
      OrderedDict([('item_n', 34)]),
      OrderedDict([('item_n', 35)]),
      OrderedDict([('item_n', 36)]),
      OrderedDict([('item_n', 37)]),
      OrderedDict([('item_n', 38)]),
      OrderedDict([('item_n', 39)]),
      OrderedDict([('item_n', 40)]),
      OrderedDict([('item_n', 41)]),
      OrderedDict([('item_n', 42)]),
      OrderedDict([('item_n', 43)]),
      OrderedDict([('item_n', 44)]),
      OrderedDict([('item_n', 45)]),
      OrderedDict([('item_n', 46)]),
      OrderedDict([('item_n', 47)]),
      OrderedDict([('item_n', 48)]),
      OrderedDict([('item_n', 49)]),
      OrderedDict([('item_n', 50)]),
      OrderedDict([('item_n', 51)]),
      OrderedDict([('item_n', 52)])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
    Routine studyTrial
    Routine feedback
  LoopTerminator trials
